PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = guilt_task
  keyboardBackend = PsychToolbox
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Routines
  Routine instructions
    TextComponent instructions_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Cuando en la pantalla aparezcan las palabras clave relacionadas con sus recuerdos, revívalo y preste atención a los sentimientos relacionados.

        Luego, recuerde responder la pregunta de las circunstancias del evento antes de 4 segundos.

        En la tarea aritmética elija el número correcto en menos de 2 segundos.

        Cuando haya leído esta instrucción, presione cualquier botón para avanzar. El experimento comenzará pronto.
    KeyboardComponent ready_beginning
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = nothing
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  Routine thanks
    TextComponent thanks_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
      text = Gracias por su participación!
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  Routine memory_block
    TextComponent memory_presentation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $memory_stimuli
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    PolygonComponent fixation_1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1.00
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    TextComponent memory_question_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.0, 0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4.00
      text [set every repeat] = $memory_question
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    TextComponent memory_answer_1_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (-0.4, -0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_1
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    TextComponent memory_answer_2_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.0, -0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_2
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    TextComponent memory_answer_3_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.4, -0.15)
      startVal [time (s)] = 11.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_3
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    KeyboardComponent memory_question_resp
      allowedKeys = 'd', 'n', 'w', 'g', 'b', 'y', 'r'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 11.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent fixation_2_code
      Code Type = Auto->JS
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      End Routine:
        if type(memory_question_resp.rt) == list:
            fixation_2_duration = 1
        else:
            fixation_2_duration = 1 + (math.floor(60*(4-memory_question_resp.rt))/60)
  Routine distractor_trial
    TextComponent top_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stimulus_number
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    TextComponent left_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $answer_left
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    TextComponent right_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.2, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $answer_right
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    KeyboardComponent distractor_resp
      allowedKeys = 'n','w','d', 'g', 'b', 'y', 'r'
      correctAns = $corr_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine start_scanning
    KeyboardComponent start_scan_keypress
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dummy_scans
    CodeComponent set_up_variables
      Code Type = Auto->JS
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      Before Experiment:
        import math
    PolygonComponent fixation_0
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine fix_post_mem
    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fixation_2_duration
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    KeyboardComponent memory_question_late_response
      allowedKeys = 'd', 'n', 'w', 'g', 'b', 'y', 'r'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_2_duration
      storeCorrect = True
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  Routine distractor_fix
    PolygonComponent fixation_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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Flow
  Routine instructions
  Routine start_scanning
  Routine dummy_scans
  LoopInitiator block_ordering_loop loopType="TrialHandler"
    conditionsFile = block_order.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'memory_type': 'guilt', 'memory_code': 'g2', 'memory_stimuli': 'keywords 1, keywords 2, keywords 3, keywords 4, keywords 5', 'memory_question': 'Where did the event take place?', 'memory_answer_1': 'Outside', 'memory_answer_2': 'Inside', 'memory_answer_3': 'Both', 'correct_answer': 'd', 'distractor_n': 3},
      {'memory_type': 'neutral', 'memory_code': 'n5', 'memory_stimuli': 'keywords 1, keywords 2, keywords 3, keywords 4, keywords 5', 'memory_question': 'How many years ago did the event take place?', 'memory_answer_1': '0-1', 'memory_answer_2': '2-5', 'memory_answer_3': '5+', 'correct_answer': 'w', 'distractor_n': 5},
      {'memory_type': 'neutral', 'memory_code': 'n2', 'memory_stimuli': 'keywords 1, keywords 2, keywords 3, keywords 4, keywords 5', 'memory_question': 'Where did the event take place?', 'memory_answer_1': 'Outside', 'memory_answer_2': 'Inside', 'memory_answer_3': 'Both', 'correct_answer': 'n', 'distractor_n': 4},
      {'memory_type': 'guilt', 'memory_code': 'g3', 'memory_stimuli': 'keywords 1, keywords 2, keywords 3, keywords 4, keywords 5', 'memory_question': 'How many years ago did the event take place?', 'memory_answer_1': '0-1', 'memory_answer_2': '2-5', 'memory_answer_3': '5+', 'correct_answer': 'n', 'distractor_n': 5}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
    Routine memory_block
    Routine fix_post_mem
    LoopInitiator distractor_block loopType="TrialHandler"
      Selected rows = $ np.random.choice(180 , size = distractor_n , replace = False)
      conditionsFile = distractor_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stimulus_number': 16, 'answer_left': 1, 'answer_right': 98, 'corr_answer': 'd'},
        {'stimulus_number': 47, 'answer_left': 16, 'answer_right': 100, 'corr_answer': 'd'},
        {'stimulus_number': 21, 'answer_left': 18, 'answer_right': 49, 'corr_answer': 'd'},
        {'stimulus_number': 72, 'answer_left': 100, 'answer_right': 64, 'corr_answer': 'n'},
        {'stimulus_number': 91, 'answer_left': 43, 'answer_right': 99, 'corr_answer': 'n'},
        {'stimulus_number': 20, 'answer_left': 99, 'answer_right': 15, 'corr_answer': 'n'},
        {'stimulus_number': 91, 'answer_left': 100, 'answer_right': 59, 'corr_answer': 'd'},
        {'stimulus_number': 65, 'answer_left': 74, 'answer_right': 36, 'corr_answer': 'd'},
        {'stimulus_number': 83, 'answer_left': 85, 'answer_right': 62, 'corr_answer': 'd'},
        {'stimulus_number': 12, 'answer_left': 67, 'answer_right': 1, 'corr_answer': 'n'},
        {'stimulus_number': 19, 'answer_left': 50, 'answer_right': 8, 'corr_answer': 'n'},
        {'stimulus_number': 48, 'answer_left': 8, 'answer_right': 62, 'corr_answer': 'n'},
        {'stimulus_number': 41, 'answer_left': 52, 'answer_right': 9, 'corr_answer': 'd'},
        {'stimulus_number': 33, 'answer_left': 42, 'answer_right': 6, 'corr_answer': 'd'},
        {'stimulus_number': 86, 'answer_left': 88, 'answer_right': 50, 'corr_answer': 'd'},
        {'stimulus_number': 55, 'answer_left': 15, 'answer_right': 67, 'corr_answer': 'n'},
        {'stimulus_number': 71, 'answer_left': 13, 'answer_right': 97, 'corr_answer': 'n'},
        {'stimulus_number': 58, 'answer_left': 3, 'answer_right': 85, 'corr_answer': 'n'}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
      Routine distractor_trial
    LoopTerminator distractor_block
    Routine distractor_fix
  LoopTerminator block_ordering_loop
  Routine thanks
