PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '001', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = guilt_task
  keyboardBackend = PsychToolbox
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Routines
  Routine instructions
    TextComponent instructions_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.09
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        Cuando en la pantalla aparezcan las palabras clave relacionadas con sus recuerdos, revívalo y preste atención a los sentimientos relacionados.

        Luego, recuerde responder la pregunta de las circunstancias del evento antes de 4 segundos.

        En la tarea aritmética elija el número correcto en menos de 2 segundos.

        Cuando haya leído esta instrucción, presione cualquier botón para avanzar. El experimento comenzará pronto.
    KeyboardComponent ready_beginning
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = nothing
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  Routine thanks
    TextComponent thanks_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 3.0
      text = Gracias por su participación!
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  Routine memory_block
    TextComponent memory_presentation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $memory_stimuli
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    PolygonComponent fixation_1
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 10.0
      stopVal [duration (s)] = 1.00
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    TextComponent memory_question_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.0, 0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4.00
      text [set every repeat] = $memory_question
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    TextComponent memory_answer_1_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (-0.4, -0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_1
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    TextComponent memory_answer_2_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.0, -0.15)
      startVal [time (s)] = 11.00
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_2
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    TextComponent memory_answer_3_disp
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.4, -0.15)
      startVal [time (s)] = 11.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $memory_answer_3
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    KeyboardComponent memory_question_resp
      allowedKeys = 'd', 'n', 'w', 'g', 'b', 'y', 'r'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 11.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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    CodeComponent fixation_2_code
      Code Type = Auto->JS
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      End Routine:
        if type(memory_question_resp.rt) == list:
            fixation_2_duration = 1
        else:
            fixation_2_duration = 1 + (math.floor(60*(4-memory_question_resp.rt))/60)
  Routine distractor_trial
    TextComponent top_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stimulus_number
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    TextComponent left_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (-0.2, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $answer_left
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    TextComponent right_number
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.12
      pos = (0.2, -0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $answer_right
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    KeyboardComponent distractor_resp
      allowedKeys = 'n','w','d', 'g', 'b', 'y', 'r'
      correctAns = $corr_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine start_scanning
    KeyboardComponent start_scan_keypress
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dummy_scans
    CodeComponent set_up_variables
      Code Type = Auto->JS
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      Before Experiment:
        import math
    PolygonComponent fixation_0
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20.0
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  Routine fix_post_mem
    PolygonComponent fixation_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fixation_2_duration
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    KeyboardComponent memory_question_late_response
      allowedKeys = 'd', 'n', 'w', 'g', 'b', 'y', 'r'
      correctAns = $correct_answer
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_2_duration
      storeCorrect = True
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  Routine distractor_fix
    PolygonComponent fixation_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.10, 0.16)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
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Flow
  Routine instructions
  Routine start_scanning
  Routine dummy_scans
  LoopInitiator block_ordering_loop loopType="TrialHandler"
    conditionsFile = block_order.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_type': 'memory', 'memory_type': 'neutral', 'memory_code': 'n2', 'memory_stimuli': 'bici, Sant Miguel, otro ciclista, Font de Buitre, mostrar camino nuevo', 'memory_question': '¿Dónde tuvo lugar el recuerdo?', 'memory_answer_1': 'Afuera', 'memory_answer_2': 'Adentro', 'memory_answer_3': 'Ambos', 'correct_answer': 'left'},
      {'block_type': 'distractor', 'memory_type': None, 'memory_code': None, 'memory_stimuli': None, 'memory_question': None, 'memory_answer_1': None, 'memory_answer_2': None, 'memory_answer_3': None, 'correct_answer': None},
      {'block_type': 'memory', 'memory_type': 'guilt', 'memory_code': 'g2', 'memory_stimuli': 'casa Santi, sofá, television, Santi, José', 'memory_question': '¿Cuántas personas participaron en la memoria?', 'memory_answer_1': '0-2', 'memory_answer_2': '3-5', 'memory_answer_3': '5+', 'correct_answer': 'down'},
      {'block_type': 'memory', 'memory_type': 'neutral', 'memory_code': 'n3', 'memory_stimuli': 'museo, Barcelona, Nara, arte moderno, no nos gustó', 'memory_question': '¿Cuántas personas participaron en la memoria?', 'memory_answer_1': '0-2', 'memory_answer_2': '3-5', 'memory_answer_3': '5+', 'correct_answer': 'left'},
      {'block_type': 'distractor', 'memory_type': None, 'memory_code': None, 'memory_stimuli': None, 'memory_question': None, 'memory_answer_1': None, 'memory_answer_2': None, 'memory_answer_3': None, 'correct_answer': None}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
    Routine memory_block
    Routine fix_post_mem
    LoopInitiator distractor_block loopType="TrialHandler"
      Selected rows = $ np.random.choice(180 , size = distractor_n , replace = False)
      conditionsFile = distractor_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stimulus_number': 16, 'answer_left': 1, 'answer_right': 98, 'corr_answer': 'n', 'diff_left': 15, 'diff_right': 82, 'choice_diff': 67},
        {'stimulus_number': 47, 'answer_left': 16, 'answer_right': 100, 'corr_answer': 'n', 'diff_left': 31, 'diff_right': 53, 'choice_diff': 22},
        {'stimulus_number': 21, 'answer_left': 18, 'answer_right': 49, 'corr_answer': 'n', 'diff_left': 3, 'diff_right': 28, 'choice_diff': 25},
        {'stimulus_number': 72, 'answer_left': 100, 'answer_right': 64, 'corr_answer': 'w', 'diff_left': 28, 'diff_right': 8, 'choice_diff': 20},
        {'stimulus_number': 91, 'answer_left': 43, 'answer_right': 99, 'corr_answer': 'w', 'diff_left': 48, 'diff_right': 8, 'choice_diff': 40},
        {'stimulus_number': 20, 'answer_left': 99, 'answer_right': 15, 'corr_answer': 'w', 'diff_left': 79, 'diff_right': 5, 'choice_diff': 74},
        {'stimulus_number': 91, 'answer_left': 100, 'answer_right': 59, 'corr_answer': 'n', 'diff_left': 9, 'diff_right': 32, 'choice_diff': 23},
        {'stimulus_number': 65, 'answer_left': 74, 'answer_right': 36, 'corr_answer': 'n', 'diff_left': 9, 'diff_right': 29, 'choice_diff': 20},
        {'stimulus_number': 83, 'answer_left': 85, 'answer_right': 62, 'corr_answer': 'n', 'diff_left': 2, 'diff_right': 21, 'choice_diff': 19},
        {'stimulus_number': 12, 'answer_left': 67, 'answer_right': 1, 'corr_answer': 'w', 'diff_left': 55, 'diff_right': 11, 'choice_diff': 44},
        {'stimulus_number': 19, 'answer_left': 50, 'answer_right': 8, 'corr_answer': 'w', 'diff_left': 31, 'diff_right': 11, 'choice_diff': 20}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
      Routine distractor_trial
    LoopTerminator distractor_block
    Routine distractor_fix
  LoopTerminator block_ordering_loop
  Routine thanks
